PsychoPy2experiment version="1.83.04"
Settings
  Data filename = os.path.join('..','raw-behavioral','s%s','%s%s%s') %(expInfo['participant'], expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = list-source
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      startVal [time (s)] = 0.5
      image [set every repeat] = os.path.join($stimDir,$stim + '.png')
      size = [15, 15]
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent response
      correctAns = $encList
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = ['f','g','h','j','k']
      startVal [time (s)] = 0.5
      store = all keys
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    TextComponent respScale
      text = List1   2   3   4   5
      pos = [0, -11]
      startVal [time (s)] = 0.5
      letterHeight = 1.25
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  Routine endScreen
    TextComponent endScreenText
      startVal [time (s)] = 0.0
      letterHeight = 1.5
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      text:
        You are now finished with this part of the task.

        Please let the experimenter know.
    KeyboardComponent endScreenResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine setPaths
    CodeComponent code
      Begin Experiment:
        import yaml
        config = yaml.load(open(os.path.join('..', 'config.yml'), 'r'))
        directories = config['directories']
        stimDir = directories['stimuli']
        rawDataDir = directories['raw-behavioral-dir']
  Routine instructions
    TextComponent instrText
      wrapWidth = 30
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        This part of the task, you will see all of the objects you studied in the first phase.

        Your job is to try to recall which list (1 through 5) the object was studied in.

        This part is self-paced. Once you respond, the screen will advance to show you the next object.

        There is no practice for this phase, so please ask your experimenter any questions you have before you begin.
    KeyboardComponent instrResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setPaths
  Routine instructions
  LoopInitiator trialPresentation loopType="TrialHandler"
    conditionsFile = os.path.join('..', 'raw-behavioral', 's'+$expInfo['participant'],'list_recog.csv')
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator trialPresentation
  Routine endScreen
