PsychoPy2experiment version="1.83.04"
Settings
  Data filename = os.path.join('..','raw-behavioral','s%s','%s%s%s') %(expInfo['participant'], expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = practice
  Units = use prefs
  Screen = 1
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Routines
  Routine endScreen
    TextComponent endScreenText
      startVal [time (s)] = 0.0
      letterHeight = 1.5
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      text:
        You are now finished with the practice.

        Please let the experimenter know if you have any questions or would like to practice again.
    KeyboardComponent endResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine recogInstructions
  Routine sourceJudgment
    ImageComponent image_for_source_judgment
      startVal [time (s)] = 0.0
      image [set every repeat] = os.path.join($practiceStimDir,'Object%03d_noWhite.png')%($stim)
      size = [15, 15]
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    TextComponent source_scale
      text [set every repeat] = 'What question did you answer earlier about this item?\n1 - %s\n2 - %s\n3 - %s\n4 - %s' %($q1,$q2,$q3,$q4)
      pos = [0, -11]
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent source_response
      forceEndRoutine = True
      allowedKeys = 'f','g','h','j'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine RNFPractice
    ImageComponent RFNPracticeImage
      startVal [time (s)] = 0.5
      image [set every repeat] = os.path.join($practiceStimDir,'Object%03d_noWhite.png')%($stim)
      size = [15, 15]
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    TextComponent text_2
      text [set every repeat] = $objRecScale
      pos = [0, -9]
      startVal [time (s)] = 0.5
      letterHeight = 1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'f','g','h'
      startVal [time (s)] = 0.5
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  Routine testInstructions_part2
    TextComponent sourceInstruc
      wrapWidth = 30
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        We will now practice the test phase as it will actually be presented to you later on.

        In this part, an image (either one you studied or a new object) will be flashed quickly on the screen.

        After this, the letter "T" will appear on the screen. This is to remind you to THINK about the upcoming memory judgments. The object will then reappear and you can indicate whether or not you studied it, how confident you are in this memory judgment, and which question it was paired with during the decision-making task.

        Do you have any questions before we practice?
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine setPaths
    CodeComponent code
      Begin Experiment:
        import yaml
        import numpy
        import re #this is how we get grep

        config = yaml.load(open(os.path.join('..', 'config.yml'), 'r'))
        directories = config['directories']
        stimDir = directories['stimuli']
        rawDataDir = directories['raw-behavioral-dir']
        practiceStimDir = directories['practice-stimuli']
  Routine itemRecog
    ImageComponent image_first_presentation
      stopVal [duration (s)] = 0.7
      startVal [time (s)] = 0.0
      image [set every repeat] = os.path.join($practiceStimDir,'Object%03d_noWhite.png')%($stim)
      size = [15, 15]
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    TextComponent think_cue
      text = T
      stopVal [duration (s)] = 1.7
      startVal [time (s)] = 0.7
      letterHeight = 2
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    ImageComponent image_for_item_recog
      startVal [time (s)] = 2.4
      image [set every repeat] = os.path.join($practiceStimDir,'Object%03d_noWhite.png')%($stim)
      size = [15, 15]
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    TextComponent item_recog_scale
      wrapWidth = 25
      text [set every repeat] = $objRecScale
      pos = [0, -11]
      startVal [time (s)] = 2.4
      letterHeight = 1
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    KeyboardComponent item_recog_resp
      forceEndRoutine = True
      allowedKeys = 'f','g','h'
      startVal [time (s)] = 2.4
      store = all keys
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  Routine explainRFN
    TextComponent text_3
      text = Please explain your response.
      startVal [time (s)] = 0.0
      letterHeight = 1.5
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trial
    CodeComponent question_string
      Begin Routine:
        if encQuest in ['bathtub', 'fridge']:
            encString = 'Would this item fit in a '
        elif encQuest in ['convenience store', 'supermarket']:
            encString = 'Would you find this item in a '
    ImageComponent image
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 1.5
      image [set every repeat] = os.path.join($practiceStimDir,'Object%03d_noWhite.png')%($stim)
      size = [15, 15]
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent response
      stopVal [duration (s)] = 1.25
      forceEndRoutine = False
      allowedKeys = ['f','g']
      startVal [time (s)] = 0.5
      store = all keys
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    TextComponent encQuestText
      wrapWidth = 25
      text [set every repeat] = $encString + $encQuest + '?'
      stopVal [duration (s)] = 1.25
      pos = [0, -9]
      startVal [time (s)] = 0.5
      letterHeight = 1
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    TextComponent ratingScaleText
      text [set every repeat] = $encRatingScale
      stopVal [duration (s)] = 0.25
      pos = [0, -11]
      startVal [time (s)] = 1.5
      letterHeight = 1
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  Routine selectSourceScale
    CodeComponent selectSourceScaleCode
      Begin Routine:
        # NB: There is no need to use '$' when referring to variables in a code chunk
        # this solution is based on: http://stackoverflow.com/questions/17661829/how-to-compare-string-and-integer-in-python
        for a in item_recog_resp.keys:
            if a.startswith('num_'):
                a = a.lstrip('num_.')
            if int(a) in {rememberResp, familiarResp}:
                sourceScale = 'What question did you answer earlier about this item?\n1 - %s\n2 - %s\n3 - %s\n4 - %s' %(q1,q2,q3,q4)
            else:
                sourceScale = 'Pick a random number\n1 \n2 \n3 \n4 '
  Routine itemConf
    CodeComponent code_2
      Begin Routine:
        resp = (item_recog_resp.keys[0])
        if resp=='f':
            num_resp = 1
        elif resp=='g':
            num_resp = 2
        elif resp=='h':
            num_resp = 3

        # convert response columns from numpy.int64 to int
        rem_resp = numpy.asscalar(rememberResp)
        fam_resp = numpy.asscalar(familiarResp)
        new_resp = numpy.asscalar(newResp)

        if numpy.equal(num_resp, rem_resp):
            objConfScale = 'How confident are you that you REMEMBER the item?'
        elif numpy.equal(num_resp, fam_resp):
            objConfScale = 'How confident are you that the item is FAMILIAR?'
        elif numpy.equal(num_resp, new_resp):
            objConfScale = 'How confident are you that the item is NEW?'
    ImageComponent image_for_item_conf
      startVal [time (s)] = 0.0
      image [set every repeat] = os.path.join($practiceStimDir,'Object%03d_noWhite.png')%($stim)
      size = [15, 15]
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    TextComponent conf_resp_question
      wrapWidth = 35
      text [set every repeat] = $objConfScale
      pos = [0, -9]
      startVal [time (s)] = 0.0
      letterHeight = 1
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    TextComponent conf_resp_scale
      wrapWidth = 35
      text = 1=highly  2=moderately  3=somewhat  4=not at all
      pos = [0, -11]
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent item_conf_response
      forceEndRoutine = True
      allowedKeys = 'f','g','h','j'
      startVal [time (s)] = 0.0
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  Routine betweenListReps
    TextComponent betweenListText
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 1.5
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  Routine testInstructions
    TextComponent RFNInstruc
      wrapWidth = 30
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        You will now practice the test phase.

        In this part, an image (either one you studied or a new object) will be presented.

        Your job is to judge whether or not you studied the object before. For items you think you studied, you will need to indicate if you can REMEMBER details about it (e.g., something about the image itself, the question it was paired with, the list it was in, or a thought you had about the object) or whether the object simply feels FAMILIAR (e.g., you think you studied it, but you cannot bring any specific details to mind from when you studied it).

        If you think you did not study the object, you will indicate that you think the object is NEW.

        Let's do an example to practice making these judgments.
    KeyboardComponent testInstrucResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine betweenListBreak
    TextComponent breakText
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        Do you have any questions?

        Please let your experimenter know if you would like to practice this again.
    KeyboardComponent breakResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine variableITI
    CodeComponent variableITIGeneration
      Begin Routine:
        # based on https://groups.google.com/forum/#!topic/psychopy-users/PqbP5cNu7Vc
        fixDuration = random() + 1.7
      End Routine:
        thisExp.addData("ITI_duration", fixDuration)
    TextComponent text
      text = +
      stopVal [duration (s)] = $fixDuration
      startVal [time (s)] = 0.0
      letterHeight = 2
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  Routine instructions
    TextComponent instrText
      wrapWidth = 30
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        We will now practice the decision-making task you will do in this first phase. For each object you will see a yes/no question on the screen. You will use the 1 and 2 keys to respond to this question.

        You will be answering one of the following four questions:

        Would this item fit in a bathtub?

        Would you find this item in a convenience store?

        Would this item fit in a fridge?

        Would you find this item in a supermarket?
    KeyboardComponent instrResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setPaths
  Routine instructions
  LoopInitiator encLoop loopType="TrialHandler"
    conditionsFile = os.path.join('..', 'raw-behavioral', 's'+$expInfo['participant'],'practice_enc.csv')
    loopType = sequential
    nReps = 1
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    Routine trial
  LoopTerminator encLoop
  Routine betweenListBreak
  Routine testInstructions
  LoopInitiator RFNPracticeLoop loopType="TrialHandler"
    conditionsFile = os.path.join('..', 'raw-behavioral', 's'+$expInfo['participant'],'practice_objrec.csv')
    loopType = random
    nReps = 1
    Selected rows = 1,2,3
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    Routine RNFPractice
    Routine explainRFN
  LoopTerminator RFNPracticeLoop
  Routine testInstructions_part2
  LoopInitiator responseLoop loopType="TrialHandler"
    conditionsFile = os.path.join('..', 'raw-behavioral', 's'+$expInfo['participant'],'practice_objrec.csv')
    loopType = sequential
    nReps = 1
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    Routine variableITI
    Routine itemRecog
    Routine itemConf
    Routine sourceJudgment
  LoopTerminator responseLoop
  Routine endScreen
