PsychoPy2experiment version="1.83.04"
Settings
  Data filename = os.path.join('..','raw-behavioral','s%s','%s%s%s') %(expInfo['participant'], expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = recog
  Units = use prefs
  Screen = 1
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Routines
  Routine endScreen
    TextComponent endScreenText
      startVal [time (s)] = 0.0
      letterHeight = 1.5
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      text:
        You are now finished with this part of the task.

        Please let the experimenter know.
    KeyboardComponent endResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine sourceJudgment
    ImageComponent image_for_source_judgment
      startVal [time (s)] = 0.0
      image [set every repeat] = os.path.join($stimDir,$stim + '.png')
      size = [15, 15]
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    TextComponent source_scale
      text [set every repeat] = 'What question did you answer earlier about this item?\n1 - %s\n2 - %s\n3 - %s\n4 - %s' %($q1,$q2,$q3,$q4)
      pos = [0, -11]
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent source_response
      forceEndRoutine = True
      allowedKeys = '1','2','3','4','num_1','num_2','num_3','num_4'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine recogInstructions
    TextComponent recogInstrText
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        You will now complete the memory task.

        As we practiced earlier, you will see studied and new objects and make a REMEMBER, FAMILIAR, NEW memory judgment. You will then rate your confidence in this memory. Finally, you will try to remember which question the item was paired with.

        Do you have any questions before we begin?
    KeyboardComponent recogInstrResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine setPaths
    CodeComponent code
      Begin Experiment:
        import yaml
        import numpy
        import re #this is how we get grep

        config = yaml.load(open(os.path.join('..', 'config.yml'), 'r'))
        directories = config['directories']
        stimDir = directories['stimuli']
        rawDataDir = directories['raw-behavioral-dir']
  Routine itemRecog
    ImageComponent image_first_presentation
      stopVal [duration (s)] = 0.7
      startVal [time (s)] = 0.0
      image [set every repeat] = os.path.join($stimDir,$stim + '.png')
      size = [15, 15]
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    TextComponent think_cue
      text = T
      stopVal [duration (s)] = 1.7
      startVal [time (s)] = 0.7
      letterHeight = 2
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    ImageComponent image_for_item_recog
      startVal [time (s)] = 2.4
      image [set every repeat] = os.path.join($stimDir,$stim + '.png')
      size = [15, 15]
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    TextComponent item_recog_scale
      wrapWidth = 25
      text [set every repeat] = $objRecScale
      pos = [0, -11]
      startVal [time (s)] = 2.4
      letterHeight = 1
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    KeyboardComponent item_recog_resp
      forceEndRoutine = True
      allowedKeys = '1','2','3','num_1','num_2','num_3'
      startVal [time (s)] = 2.4
      store = all keys
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  Routine trial
    CodeComponent question_string
      Begin Routine:
        if encQuest in ['bathtub', 'fridge']:
            encString = 'Would this item fit in a '
        elif encQuest in ['convenience store', 'supermarket']:
            encString = 'Would you find this item in a '
    ImageComponent image
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 1.5
      image [set every repeat] = os.path.join($stimDir,$stim + '.png')
      size = [15, 15]
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent response
      stopVal [duration (s)] = 1.25
      forceEndRoutine = False
      allowedKeys = ['1','2','3','4','5','6','7','8','9','0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9','num_0']
      startVal [time (s)] = 0.5
      store = all keys
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    TextComponent encQuestText
      wrapWidth = 25
      text [set every repeat] = $encString + $encQuest + '?'
      stopVal [duration (s)] = 1.25
      pos = [0, -9]
      startVal [time (s)] = 0.5
      letterHeight = 1
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    TextComponent ratingScaleText
      text [set every repeat] = $encRatingScale
      stopVal [duration (s)] = 0.25
      pos = [0, -11]
      startVal [time (s)] = 1.5
      letterHeight = 1
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  Routine itemConf
    CodeComponent set_conf_color
      Begin Routine:
        # handle when subjects use number pad to respond
        if re.match('num_', item_recog_resp.keys[0]):
            resp_num = re.search('num_([123])', item_recog_resp.keys[0]).group(1)
            resp = int(resp_num)
        else:
            resp = int(item_recog_resp.keys[0])

        # convert response columns from numpy.int64 to int
        rem_resp = numpy.asscalar(rememberResp)
        fam_resp = numpy.asscalar(familiarResp)
        new_resp = numpy.asscalar(newResp)

        if numpy.equal(resp, rem_resp):
            objConfScale = 'How confident are you that you REMEMBER the item?'
        elif numpy.equal(resp, fam_resp):
            objConfScale = 'How confident are you that the item is FAMILIAR?'
        elif numpy.equal(resp, new_resp):
            objConfScale = 'How confident are you that the item is NEW?'
    ImageComponent image_for_item_conf
      startVal [time (s)] = 0.0
      image [set every repeat] = os.path.join($stimDir,$stim + '.png')
      size = [15, 15]
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    TextComponent conf_resp_question
      wrapWidth = 25
      color [set every repeat] = white
      text [set every repeat] = $objConfScale
      pos = [0, -9]
      startVal [time (s)] = 0.0
      letterHeight = 1
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    TextComponent conf_resp_scale
      wrapWidth = 25
      text = 1=highly  2=moderately  3=somewhat  4=not at all
      pos = [0, -11]
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent item_conf_response
      forceEndRoutine = True
      allowedKeys = '1','2','3','4', 'num_1','num_2','num_3','num_4'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine setConfScaleColor
  Routine variableITI
    CodeComponent variableITIGeneration
      Begin Routine:
        # based on https://groups.google.com/forum/#!topic/psychopy-users/PqbP5cNu7Vc
        fixDuration = random() + 1.7
      End Routine:
        thisExp.addData("ITI_duration", fixDuration)
    TextComponent text
      text = +
      stopVal [duration (s)] = $fixDuration
      startVal [time (s)] = 0.0
      letterHeight = 2
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Flow
  Routine setPaths
  Routine recogInstructions
  LoopInitiator responseLoop loopType="TrialHandler"
    conditionsFile = os.path.join('..', 'raw-behavioral', 's'+$expInfo['participant'],'recog_all_lists.csv')
    loopType = sequential
    nReps = 1
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    Routine variableITI
    Routine itemRecog
    Routine itemConf
    Routine sourceJudgment
  LoopTerminator responseLoop
  Routine endScreen
