PsychoPy2experiment version="1.83.04"
Settings
  Data filename = os.path.join('..','raw-behavioral','s%s','%s%s%s') %(expInfo['participant'], expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Enable Escape = False
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = recog
  Units = use prefs
  Screen = 1
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Routines
  Routine postBreakITI
  Routine endScreen
    CodeComponent end_code
      Begin Routine:
        portCleanup()
      End Routine:
        cond = 69
        sendTrigger(cond)
        thisExp.addData(("expt_end_" + str(cond)), core.getTime())
    TextComponent endScreenText
      startVal [time (s)] = 0.0
      letterHeight = 1.5
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      text:
        You are now finished with this part of the task.

        Please let the experimenter know.
    KeyboardComponent endResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine sourceJudgment
    CodeComponent source_resp_code
      Begin Routine:
        print("routine starting: sourceJudgement")

        portCleanup()
        cond = 14
        sendTrigger(cond)
        thisExp.addData(("item_source_onset_" + str(cond)), core.getTime())
      End Routine:
        portCleanup()

        if len(source_response.keys)>0:
            cond = 141
            sendTrigger(cond)
            thisExp.addData(("source_resp_" + str(cond)), core.getTime())

        print("routine complete: sourceJudgement")
    ImageComponent image_for_source_judgment
      startVal [time (s)] = 0.0
      image [set every repeat] = os.path.join($stimDir,$stim + '.png')
      size = [15, 15]
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    TextComponent source_scale
      text [set every repeat] = 'What question did you answer earlier about this item?\n1 - %s\n2 - %s\n3 - %s\n4 - %s' %($q1,$q2,$q3,$q4)
      pos = [0, -11]
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent source_response
      forceEndRoutine = True
      allowedKeys = 'f','g','h','j'
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent fix_cross_sourceJudgment
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 2
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  Routine recogInstructions
    CodeComponent recog_instr_code
      Begin Routine:
        print("routine starting: recogInstructions")
        portCleanup()
        win.mouseVisible = True
      End Routine:
        if recogInstrText.status==FINISHED:
            cond = 4
            sendTrigger(cond)

        win.mouseVisible = False

        print("routine complete: recogInstructions")
      Each Frame:
        # code from: https://discourse.psychopy.org/t/word-by-word-sentence-presentation-with-parallel-port-output/1707/8
        if recogInstrText.status==STARTED:
            cond = 3
            sendTrigger(cond)
    TextComponent recogInstrText
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        You will now complete the memory task.

        As we practiced earlier, you will see studied and new objects and make a REMEMBER, FAMILIAR, NEW memory judgment. Then, you will try to remember which question the item was paired with.

        Do you have any questions before we begin?
    MouseComponent recogInstr_mouse
      timeRelativeTo = experiment
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
  Routine thinkCue
    CodeComponent thinkCue_code
      Begin Routine:
        print("routine starting: thinkCue")

        portCleanup()
        cond = 11
        sendTrigger(cond)
        thisExp.addData(("think_cue_onset_" + str(cond)), core.getTime())
      End Routine:
        thisExp.addData("thinkCue_nDroppedFrames", win.nDroppedFrames)

        print("routine complete: thinkCue")
    TextComponent think_cue
      text = T
      stopVal [duration (frames)] = $thinkCueDurFrames
      durationEstim = 1.7
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 2
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  Routine betweenBreak
    CodeComponent break_code
      Begin Routine:
        portCleanup()
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
      Each Frame:
        if breakText.status==STARTED:
            cond = 88
            sendTrigger(cond)
    TextComponent breakText
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        Take a chance to rest and blink.

        Let the experimenter know when you are ready for the next set of trials.
    MouseComponent mouse
      timeRelativeTo = experiment
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
  Routine itemFirstPresentation
    CodeComponent itemFirst_code
      Begin Routine:
        print("routine starting: itemFirstPresentation")

        portCleanup()
        cond = 10
        sendTrigger(cond)
        thisExp.addData(("image_first_onset_" + str(cond)), core.getTime())
      End Routine:
        thisExp.addData("firstPresentation_nDroppedFrames", win.nDroppedFrames)

        print("routine complete: itemFirstPresentation")
    ImageComponent image_first_presentation
      stopVal [duration (frames)] = $itemFirstDurFrames
      durationEstim = 0.7
      startEstim = 0
      startVal [frame N] = $text.status==FINISHED
      image [set every repeat] = os.path.join($stimDir,$stim + '.png')
      size = [15, 15]
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    TextComponent fix_first_presentation
      text = +
      stopVal [duration (frames)] = $itemFirstDurFrames
      durationEstim = 0.7
      startEstim = 0
      startVal [frame N] = $text.status==FINISHED
      letterHeight = 2
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  Routine beginBlock
    CodeComponent beginBreak_code
      Begin Routine:
        print("routine starting: beginBlock")

        portCleanup()
      End Routine:
        print("routine complete: beginBlock")
      Each Frame:
        if begin_fix.status==STARTED:
            cond = 5
            sendTrigger(cond) # this doesn't get sent
            thisExp.addData(("begin_fix_onset_" + str(cond)), core.getTime())
    TextComponent begin_0
      text = We are almost ready to start, but there a few things to do first to prepare yourself...
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.0
      letterHeight = 1
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    TextComponent begin_1
      text = Take a moment to get comfortable.
      stopVal [duration (s)] = 6.0
      startVal [time (s)] = 4.0
      letterHeight = 1
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    TextComponent blinks
      text = Please take a few moments to blink your eyes.
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 10.0
      letterHeight = 1
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    TextComponent begin_2
      text = Get ready...the next set of trials will begin soon!
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 15.0
      letterHeight = 1
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    TextComponent begin_fix
      text = +
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 20.0
      letterHeight = 2
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  Routine itemRecog
    CodeComponent item_recog_code
      Begin Routine:
        print("routine starting: itemRecog")

        portCleanup()
        cond = 12
        sendTrigger(cond)
        thisExp.addData(("image_second_onset_" + str(cond)), core.getTime())
      End Routine:
        portCleanup()

        if len(item_recog_resp.keys)>0:
            cond = 121
            sendTrigger(cond)
            thisExp.addData(("item_recog_resp_" + str(cond)), core.getTime())

        thisExp.addData("itemRecog_nDroppedFrames", win.nDroppedFrames)

        print("routine complete: itemRecog")
    ImageComponent image_for_item_recog
      startEstim = 0
      startVal [frame N] = $think_cue.status==FINISHED
      image [set every repeat] = os.path.join($stimDir,$stim + '.png')
      size = [15, 15]
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    TextComponent item_recog_scale
      wrapWidth = 25
      text [set every repeat] = $objRecScale
      pos = [0, -11]
      startEstim = 0
      startVal [frame N] = $think_cue.status==FINISHED
      letterHeight = 1
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    KeyboardComponent item_recog_resp
      forceEndRoutine = True
      startEstim = 0
      allowedKeys = 'f','g','h'
      startVal [frame N] = $think_cue.status==FINISHED
      store = all keys
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    TextComponent fix_cross_itemRecog
      text = +
      startVal [frame N] = $think_cue.status==FINISHED
      letterHeight = 2
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  Routine Break
    CodeComponent subjBreakCode
      Begin Routine:
        print("routine starting: subjBreak")

        portCleanup()
      End Routine:
        print("routine complete: subjBreak")
      Each Frame:
        # based on https://groups.google.com/forum/#!topic/psychopy-users/gvSkCZa2ceE
        if responseLoop.thisTrialN not in [15,30]:
            continueRoutine=False
            cond = 99
            sendTrigger(cond)
            thisExp.addData(("subjBreak_onset_" + str(cond)), core.getTime())
    TextComponent subj_break_screen
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        Take a short break.

        Press 1 when you are ready to continue!
    KeyboardComponent subj_break_resp
      forceEndRoutine = True
      allowedKeys = 'f'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine trial
    CodeComponent question_string
      Begin Routine:
        if encQuest in ['bathtub', 'fridge']:
            encString = 'Would this item fit in a '
        elif encQuest in ['convenience store', 'supermarket']:
            encString = 'Would you find this item in a '
    ImageComponent image
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 1.5
      image [set every repeat] = os.path.join($stimDir,$stim + '.png')
      size = [15, 15]
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent response
      stopVal [duration (s)] = 1.25
      forceEndRoutine = False
      allowedKeys = ['1','2','3','4','5','6','7','8','9','0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9','num_0']
      startVal [time (s)] = 0.5
      store = all keys
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    TextComponent encQuestText
      wrapWidth = 25
      text [set every repeat] = $encString + $encQuest + '?'
      stopVal [duration (s)] = 1.25
      pos = [0, -9]
      startVal [time (s)] = 0.5
      letterHeight = 1
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    TextComponent ratingScaleText
      text [set every repeat] = $encRatingScale
      stopVal [duration (s)] = 0.25
      pos = [0, -11]
      startVal [time (s)] = 1.5
      letterHeight = 1
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  Routine itemConf
    CodeComponent set_conf_scale
      Begin Routine:
        print("routine starting: itemConf")

        portCleanup()

        #no longer need to record dropped frames b/c not looking at EEG for these responses
        win.recordFrameIntervals = False

        # recode letter responses to numeric
        resp = (item_recog_resp.keys[0])
        if resp=='f':
            num_resp = 1
        elif resp=='g':
            num_resp = 2
        elif resp=='h':
            num_resp = 3

        # convert response columns from numpy.int64 to int
        rem_resp = numpy.asscalar(rememberResp)
        fam_resp = numpy.asscalar(familiarResp)
        new_resp = numpy.asscalar(newResp)

        if numpy.equal(num_resp, rem_resp):
            objConfScale = 'How confident are you that you REMEMBER the item?'
        elif numpy.equal(num_resp, fam_resp):
            objConfScale = 'How confident are you that the item is FAMILIAR?'
        elif numpy.equal(num_resp, new_resp):
            objConfScale = 'How confident are you that the item is NEW?'

        # do after all of these other things that happen at the beginning of the routine
        cond = 13
        sendTrigger(cond)
        thisExp.addData(("item_conf_onset_" + str(cond)), core.getTime())
      End Routine:
        portCleanup()

        if len(item_conf_response.keys)>0:
            cond = 131
            sendTrigger(cond)
            thisExp.addData(("item_conf_resp_" + str(cond)), core.getTime())

        print("routine complete: itemConf")
    ImageComponent image_for_item_conf
      startVal [time (s)] = 0.0
      image [set every repeat] = os.path.join($stimDir,$stim + '.png')
      size = [15, 15]
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    TextComponent conf_resp_question
      wrapWidth = 35
      text [set every repeat] = $objConfScale
      pos = [0, -9]
      startVal [time (s)] = 0.0
      letterHeight = 1
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    TextComponent conf_resp_scale
      wrapWidth = 35
      text = 1=highly  2=moderately  3=somewhat  4=not at all
      pos = [0, -11]
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent item_conf_response
      forceEndRoutine = True
      allowedKeys = 'f','g','h','j'
      startVal [time (s)] = 0.0
      store = all keys
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    TextComponent fix_cross_itemConf
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 2
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  Routine setPaths
    CodeComponent begin_expt_code
      Begin Experiment:
        import yaml
        from psychopy import parallel, logging, visual, core
        from math import ceil
        import re #this is how we get grep
        import numpy

        config = yaml.load(open(os.path.join('..', 'config.yml'), 'r'))
        directories = config['directories']
        stimDir = directories['stimuli']
        rawDataDir = directories['raw-behavioral-dir']

        global pulse_sent
        pulse_sent = False
        global pulse_terminated
        pulse_terminated = False

        global pulse_start_time
        pulse_start_time = 0

        #setup parallel port for sending EEG trigger codes
        port_present = 1 # set to 0 for testing when parallel port isn't around
        if port_present:
            port = parallel.PParallelLinux(address='/dev/parport0')
            # start with a tidy port
            port.setData(0)
            global pulse_sent
            pulse_sent = False
            global pulse_terminated
            pulse_terminated = False

        # Setup timing using frame rate
        itemFirstDur = 0.7
        thinkCueDur= 1.7
        frame_rate = win.getActualFrameRate()

        itemFirstDurFrames = ceil(itemFirstDur * frame_rate)
        thinkCueDurFrames = ceil(thinkCueDur * frame_rate)
        thisExp.addData("itemFirst_numFrames", itemFirstDurFrames)
        thisExp.addData("thinkCue_numFrames", thinkCueDurFrames)

        # setup function for sending triggers
        # based on:
        # https://discourse.psychopy.org/t/word-by-word-sentence-presentation-with-parallel-port-output/1707/8
        # https://discourse.psychopy.org/t/execute-code-at-a-time-offset-in-a-loop-in-builder/938
        def portCleanup():
            print("port cleanup")
            # code from: https://discourse.psychopy.org/t/word-by-word-sentence-presentation-with-parallel-port-output/1707/8

            # tidy any that may have not been terminated properly:
            if port_present:
                port.setData(0)

            global pulse_sent
            pulse_sent = False

            global pulse_terminated
            pulse_terminated = False

        def sendTrigger(cond):
            # send the trigger code
            if not pulse_sent and not pulse_terminated:
                if port_present:
                    win.callOnFlip(port.setData, cond)

                print("sending trigger")

                global pulse_start_time
                pulse_start_time = core.getTime()

                thisExp.addData(("pulse_t_for_" + str(cond)), pulse_start_time)

                global pulse_sent
                pulse_sent = True

                global pulse_terminated
                pulse_terminated = False

            # re-set and start listening again
            if pulse_sent and not pulse_terminated:
                cur_time = core.getTime()
                elapsed_time = cur_time - pulse_start_time
                print("checking to see if enough time has elasped to reset the port")
                print("cur_time (core.getTime): " + str(cur_time))
                print("pulse_start_time (core.getTime): "+str(pulse_start_time))
                print("elapsed_time: "+str(elapsed_time))

                if elapsed_time >= 0.010:
                    print("enough time has elapsed; resetting port to 0")
                    if port_present:
                        port.setData(0)

                    global pulse_terminated
                    pulse_terminated = True
  Routine miniITI
    TextComponent mini_fix_cross
      text = +
      stopVal [duration (s)] = 0.1
      startVal [time (s)] = 0.0
      letterHeight = 2
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  Routine variableITI
    CodeComponent ITI_code
      Begin Routine:
        print("routine starting: variableITI")

        # Start counting dropped frames again b/c we care about timing
        # based on: http://www.psychopy.org/general/timing/detectingFrameDrops.html
        win.recordFrameIntervals = True

        # based on https://groups.google.com/forum/#!topic/psychopy-users/PqbP5cNu7Vc
        fixDuration = 2
        fixDurationFrames = ceil(fixDuration * frame_rate)

        portCleanup()
        cond = 40
        sendTrigger(cond)
        thisExp.addData(("ITI_onset_" + str(cond)), core.getTime())
      End Routine:
        portCleanup()

        if text.status==FINISHED:
            cond = 41
            sendTrigger(cond) # this doesn't get sent
            thisExp.addData(("ITI_offset_" + str(cond)), core.getTime())

        thisExp.addData("ITI_duration_sec", fixDuration)
        thisExp.addData("ITI_duration_frames", fixDurationFrames)
        thisExp.addData("ITI_nDroppedFrames", win.nDroppedFrames)
        #thisExp.addData("ITI_frameIntervals", win.frameIntervals) # this spits out too much data, but could be used when script testing


        print("routine complete: variableITI")
    TextComponent text
      text = +
      stopVal [duration (frames)] = $fixDurationFrames
      durationEstim = 2
      startVal [time (s)] = 0
      letterHeight = 2
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Flow
  Routine setPaths
  Routine recogInstructions
  LoopInitiator blockLoop loopType="TrialHandler"
    conditionsFile = eeg-block-ids.csv
    loopType = sequential
    nReps = 1
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    Routine beginBlock
    LoopInitiator responseLoop loopType="TrialHandler"
      conditionsFile = os.path.join('..', 'raw-behavioral', 's'+$expInfo['participant'],'eeg_recog_'+str($blockNum)+'.csv')
      loopType = sequential
      nReps = 1
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      Routine Break
      Routine variableITI
      Routine itemFirstPresentation
      Routine thinkCue
      Routine itemRecog
      Routine itemConf
      Routine sourceJudgment
      Routine miniITI
    LoopTerminator responseLoop
    Routine betweenBreak
  LoopTerminator blockLoop
  Routine endScreen
