PsychoPy2experiment version="1.83.04"
Settings
  Data filename = os.path.join('..','raw-behavioral','s%s','%s%s%s') %(expInfo['participant'], expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = enc
  Units = use prefs
  Screen = 1
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Routines
  Routine endScreen
    TextComponent endScreenText
      startVal [time (s)] = 0.0
      letterHeight = 1.5
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      text:
        You are now finished with this part of the task.

        Please let the experimenter know.
    KeyboardComponent endResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine selfPacedBreak
    TextComponent selfBreakText
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        Please take a break before you continue.

        Press the letter G when you are ready to begin.
    KeyboardComponent selfBreakResp
      forceEndRoutine = True
      allowedKeys = 'g'
      startVal [time (s)] = 0.0
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  Routine sourceJudgment
    ImageComponent image_for_source_judgment
      startVal [time (s)] = 0.0
      image [set every repeat] = os.path.join($stimDir,$stim + '.png')
      size = [15, 15]
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    TextComponent source_scale
      text [set every repeat] = 'What question did you answer earlier about this item?\n1 - %s\n2 - %s' %($q1,$q2)
      pos = [0, -11]
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent source_response
      forceEndRoutine = True
      allowedKeys = '1','2','num_1','num_2'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine recogInstructions
    TextComponent recogInstrText
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        You will now complete the memory task.

        As we practiced earlier, you will see studied and new objects and make a REMEMBER, FAMILIAR, NEW memory judgment. Then, you will try to remember which question the item was paired with.

        Do you have any questions before we begin?
    KeyboardComponent recogInstrResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine getExperimenter
    TextComponent getExperimenterText
      text = Please tell the experimenter you are finished with the decision making task.
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 1
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    KeyboardComponent getExperimenterResp
      forceEndRoutine = True
      allowedKeys = 't'
      startVal [time (s)] = 0.0
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  Routine setPaths
    CodeComponent code
      Begin Experiment:
        import yaml
        config = yaml.load(open(os.path.join('..', 'config.yml'), 'r'))
        directories = config['directories']
        stimDir = directories['stimuli']
        rawDataDir = directories['raw-behavioral-dir']
  Routine itemRecog
    ImageComponent image_first_presentation
      stopVal [duration (s)] = 0.7
      startVal [time (s)] = 0.0
      image [set every repeat] = os.path.join($stimDir,$stim + '.png')
      size = [15, 15]
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    TextComponent think_cue
      text = T
      stopVal [duration (s)] = 1.7
      startVal [time (s)] = 0.7
      letterHeight = 2
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    ImageComponent image_for_item_recog
      startVal [time (s)] = 2.4
      image [set every repeat] = os.path.join($stimDir,$stim + '.png')
      size = [15, 15]
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    TextComponent item_recog_scale
      wrapWidth = 25
      text [set every repeat] = $objRecScale
      pos = [0, -11]
      startVal [time (s)] = 2.4
      letterHeight = 1
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    KeyboardComponent item_recog_resp
      forceEndRoutine = True
      allowedKeys = '1','2','3','num_1','num_2','num_3'
      startVal [time (s)] = 2.4
      store = all keys
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  Routine listNum
    TextComponent listID
      text [set every repeat] = 'List'+str($listNum)
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 2
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  Routine recogInstructions_2
  Routine trial
    CodeComponent question_string
      Begin Routine:
        if encQuest in ['bathtub', 'fridge']:
            encString = 'Would this item fit in a '
        elif encQuest in ['convenience store', 'supermarket']:
            encString = 'Would you find this item in a '
    ImageComponent image
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 1.5
      image [set every repeat] = os.path.join($stimDir,$stim + '.png')
      size = [15, 15]
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent response
      stopVal [duration (s)] = 1.25
      forceEndRoutine = False
      allowedKeys = ['f','g','h','j','k','1','2','3','4','5','6','7','8','9','0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9','num_0']
      startVal [time (s)] = 0.5
      store = all keys
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    TextComponent encQuestText
      wrapWidth = 25
      text [set every repeat] = $encString + $encQuest + '?'
      stopVal [duration (s)] = 1.25
      pos = [0, -9]
      startVal [time (s)] = 0.5
      letterHeight = 1
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    TextComponent ratingScaleText
      text [set every repeat] = $encRatingScale
      stopVal [duration (s)] = 0.25
      pos = [0, -11]
      startVal [time (s)] = 1.5
      letterHeight = 1
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  Routine betweenListReps
    TextComponent betweenListText
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 1.5
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  Routine betweenListBreak
    TextComponent breakText
      text = Please take a 30 second break before you continue.
      stopVal [duration (s)] = 30
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      letterHeight = 1.5
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  Routine variableITI
    CodeComponent variableITIGeneration
      Begin Routine:
        # based on https://groups.google.com/forum/#!topic/psychopy-users/PqbP5cNu7Vc
        fixDuration = random() + 1.7
      End Routine:
        thisExp.addData("ITI_duration", fixDuration)
    TextComponent text
      text = +
      stopVal [duration (s)] = $fixDuration
      startVal [time (s)] = 0.0
      letterHeight = 2
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  Routine instructions
    TextComponent instrText
      wrapWidth = 30
      startVal [time (s)] = 0.0
      letterHeight = 1
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      text:
        You will now complete the decision-making task we just practiced. You will see an object and make a yes/no decision.

        This will repeat several times for different lists of objects. It is also important that you pay attention to the other surrounding objects (ie, the objects that are studied in the same list).

        Do you have any questions before we begin?
    KeyboardComponent instrResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setPaths
  Routine instructions
  LoopInitiator trialsLoop loopType="TrialHandler"
    conditionsFile = list-ids.csv
    loopType = sequential
    nReps = 1
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    Routine listNum
    LoopInitiator encLoop loopType="TrialHandler"
      conditionsFile = os.path.join('..', 'raw-behavioral', 's'+$expInfo['participant'],'enc_'+str($listNum)+'.csv')
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator encLoop
    Routine betweenListBreak
  LoopTerminator trialsLoop
  Routine endScreen
